<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>Z:\2023_BA_Patterson_data\Sep2023_conjBA_BeefDiet_001_Blank.mzML</file>
            <file>Z:\2023_BA_Patterson_data\Sep2023_conjBA_BeefDiet_002_Pool_ddMS2_pos.mzML</file>
            <file>Z:\2023_BA_Patterson_data\Sep2023_conjBA_BeefDiet_004_Blank.mzML</file>
            <file>Z:\2023_BA_Patterson_data\Sep2023_conjBA_BeefDiet_005_Pool.mzML</file>
            <file>Z:\2023_BA_Patterson_data\Sep2023_conjBA_BeefDiet_006_L1-46.mzML</file>
            <file>Z:\2023_BA_Patterson_data\Sep2023_conjBA_BeefDiet_007_L1-98.mzML</file>
            <file>Z:\2023_BA_Patterson_data\Sep2023_conjBA_BeefDiet_008_L1-100.mzML</file>
            <file>Z:\2023_BA_Patterson_data\Sep2023_conjBA_BeefDiet_009_L1-143.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="true">
            <parameter name="MS1 detector (Advanced)" selected="true" selected_item="Factor of lowest signal">
                <module name="Factor of lowest signal">
                    <parameter name="Noise factor">2.5</parameter>
                </module>
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            </parameter>
            <parameter name="MS2 detector (Advanced)" selected="true" selected_item="Factor of lowest signal">
                <module name="Factor of lowest signal">
                    <parameter name="Noise factor">2.0</parameter>
                </module>
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            </parameter>
            <parameter name="Denormalize fragment scans (traps)">false</parameter>
        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.3</min>
                <max>7.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">3</parameter>
        <parameter name="Minimum intensity for consecutive scans">10000.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chroms</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.003</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="true">0.01</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.8740000000000001</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.4</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>1.0</max>
        </parameter>
        <parameter name="Minimum scans (data points)">3</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.04</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">2</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">13C peak</parameter>
        <parameter name="Minimum aligned features (samples)" selected="false">
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        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="true">
            <parameter name="m/z tolerance">
                <absolutetolerance>0.0015</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Max charge">1</parameter>
            <parameter name="Estimate minimum carbon">true</parameter>
            <parameter name="Remove if 13C">true</parameter>
            <parameter name="Exclude isotopes">O,O</parameter>
        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">false</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum scans (data points)">2</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>8.0E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum feature height">30000.0</parameter>
        <parameter name="Intensity threshold for correlation">10000.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>5</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="false">
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        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Minimum samples">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Check">AVGERAGE</parameter>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="MS mode">POSITIVE</parameter>
            <parameter name="Maximum charge">3</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="41.026549" mol_formula="CH3CN" name="ACN" type="CLUSTER"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="1" mass_difference="-17.0033" mol_formula="" name="H2O+H" type="ADDUCT"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="1" mass_difference="-35.0138" mol_formula="" name="2H2O+H" type="ADDUCT"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="1" mass_difference="-53.0244" mol_formula="" name="3H2O+H" type="ADDUCT"/>
                </modification_type>
            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">false</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">false</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule" parameter_version="1">
        <parameter name="Aligned feature list" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Blank/Control raw data files" type="NAME_PATTERN">
            <name_pattern>*lank*</name_pattern>
        </parameter>
        <parameter name="Minimum # of detection in blanks">3</parameter>
        <parameter name="Quantification">Height</parameter>
        <parameter name="Ratio type">MAXIMUM</parameter>
        <parameter name="Fold change increase" selected="true">3.0</parameter>
        <parameter name="Keep or remove features (of rows) below fold change">REMOVE - Only keep features above fold change</parameter>
        <parameter name="Create secondary list of subtracted features">false</parameter>
        <parameter name="Suffix">subtracted</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\Ipsita\Patterson_beefconjBA\Patterson_Beef_ConjBA_iimn.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\Ipsita\Patterson_beefconjBA\Patterson_Beef_ConjBA_iimn_SIRIUS.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS" selected="false">
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
