<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.4.27">
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">100000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">1000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">100000.0</parameter>
        <parameter name="Minimum absolute height">300000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.ADAPpeakpicking.AdapResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">resolved2</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="true">0.01</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="S/N threshold">5.0</parameter>
        <parameter name="S/N estimator" selected_item="Intensity window SN">
            <module name="Intensity window SN"/>
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        </parameter>
        <parameter name="min feature height">1000.0</parameter>
        <parameter name="Coefficient/area threshold">110.0</parameter>
        <parameter name="Peak duration range">
            <min>0.1</min>
            <max>1.0</max>
        </parameter>
        <parameter name="RT wavelet range">
            <min>0.05</min>
            <max>0.1</max>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.2</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.2</parameter>
        <parameter name="Mobility tolerance" selected="true">0.008</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">75.0</parameter>
        <parameter name="Retention time tolerance" unit="SECONDS">0.2</parameter>
        <parameter name="Weight for RT">25.0</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule" parameter_version="1">
        <parameter name="Aligned feature list" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Blank/Control raw data files" type="SPECIFIC_FILES">
            <specific_file path="/Users/wendergomes/Documents/PlantMASST/NIST_vegetarianism of humans/mzXML_Files/Blank_00.mzXML">Blank_00.mzXML</specific_file>
            <specific_file path="/Users/wendergomes/Documents/PlantMASST/NIST_vegetarianism of humans/mzXML_Files/Blank_02.mzXML">Blank_02.mzXML</specific_file>
            <specific_file path="/Users/wendergomes/Documents/PlantMASST/NIST_vegetarianism of humans/mzXML_Files/Blank_01.mzXML">Blank_01.mzXML</specific_file>
            <specific_file path="/Users/wendergomes/Documents/PlantMASST/NIST_vegetarianism of humans/mzXML_Files/Blank_03.mzXML">Blank_03.mzXML</specific_file>
            <specific_file path="/Users/wendergomes/Documents/PlantMASST/NIST_vegetarianism of humans/mzXML_Files/Blank_04.mzXML">Blank_04.mzXML</specific_file>
            <specific_file path="/Users/wendergomes/Documents/PlantMASST/NIST_vegetarianism of humans/mzXML_Files/Blank_06.mzXML">Blank_06.mzXML</specific_file>
            <specific_file path="/Users/wendergomes/Documents/PlantMASST/NIST_vegetarianism of humans/mzXML_Files/Blank_05.mzXML">Blank_05.mzXML</specific_file>
            <specific_file path="/Users/wendergomes/Documents/PlantMASST/NIST_vegetarianism of humans/mzXML_Files/Blank_07.mzXML">Blank_07.mzXML</specific_file>
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        </parameter>
        <parameter name="Minimum # of detection in blanks">1</parameter>
        <parameter name="Quantification">Height</parameter>
        <parameter name="Ratio type">MAXIMUM</parameter>
        <parameter name="Fold change increase" selected="false">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</parameter>
        <parameter name="Keep or remove features (of rows) below fold change">REMOVE - Only keep features above fold change</parameter>
        <parameter name="Create secondary list of subtracted features">false</parameter>
        <parameter name="Suffix">subtracted</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">2samples</parameter>
        <parameter name="Minimum aligned features (samples)" selected="false">
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        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="true">1</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Reset the feature number ID">true</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/wendergomes/Documents/PlantMASST/NIST_vegetarianism of humans/NIST_veget_of_humans_dataset.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">most intense</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.5</absolutetolerance>
                <ppmtolerance>40.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.3</parameter>
            <parameter name="Signal count threshold (%)">0.2</parameter>
            <parameter name="Isolation window offset (m/z)">3.0</parameter>
            <parameter name="Isolation window width (m/z)">6.0</parameter>
        </parameter>
        <parameter name="Filter rows">ONLY WITH MS2</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">true</parameter>
    </batchstep>
</batch>
